PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = PsychoPy Retry
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. You will be presented with two training sequences, followed by a testing phase. Please pay attention to the words as they're presented to you.
        Press space to begin.
    KeyboardComponent progression
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training
    TextComponent text_2
      font = BACS1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Hello
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Flow
  Routine intro
  Routine training
